PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine WelcomeScreen
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    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        (Ethics)
        (Important Information)
    ButtonComponent ContinueButton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0
      text = Click to continue
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  Routine ConditionSelection
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    TextComponent ConditionSelectionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Click the button below that corresponds to the condition you were assigned. If you are not sure, please ask the experimenter.
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    ButtonComponent Condition1Button
      bold = True
      callback = InstructionText.setText("Please take out your phone and go the Instagram account @[Account Name]\n Please watch every video in order from top to bottom with the volume on. You must finish each video before scrolling to the next and only watch each video once.\n Click continue when you are finished!")
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = 1
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    ButtonComponent Condition2Button
      bold = True
      callback = InstructionText.setText("Please take out your phone and go to the YouTube channel @[Channel Name]\n You should watch the video [Video Name] in fullscreen with the volume on until it is complete.\n Click continue when you are finished.")
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = 2
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  Routine StimulusLink
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    TextComponent InstructionText
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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    ButtonComponent StimulusLinkButton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0
      text = Click to continue
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  Routine ScreenshotOrderTask
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    ImageComponent ScreenshotLeft
      image = Screenshots/new1.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent ScreenshotRight
      image = Screenshots/old1.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent ScreenshotLeftButton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Click here
      timeRelativeTo = experiment
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  Routine WordListStudy
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  Routine DistractionTask
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  Routine WordListInstructions
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  Routine WordListTest
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  Routine BreakOrFinish
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Flow
  Routine WelcomeScreen
  Routine ConditionSelection
  LoopInitiator WithinSubjects loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine StimulusLink
    LoopInitiator ScreenshotOrderTrial loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine ScreenshotOrderTask
    LoopTerminator ScreenshotOrderTrial
    Routine WordListInstructions
    LoopInitiator WordListTrial loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine WordListStudy
    LoopTerminator WordListTrial
    Routine DistractionTask
    Routine WordListTest
    Routine BreakOrFinish
  LoopTerminator WithinSubjects
